PsychoPy2experiment version="3.0.6"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = lexicalfinal
  exportHTML = manually
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Routines
  Routine intruc1
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thanks for your participation in this activity
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  Routine Intruc2
    TextComponent text_2
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You will see a word on the screen,
        if you think it is a REAL SPANISH word and you can explain it to a friend press -Y-
        If it is a non-sense word or you do not know it press N
        Press the space bar to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n',
      correctAns = y, n
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine final
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you , the activity has ended
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Flow
  Routine intruc1
  Routine Intruc2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'vivir'), ('correctAns', 'y')]),
      OrderedDict([('word', 'matrimonio'), ('correctAns', 'y')]),
      OrderedDict([('word', 'colgar'), ('correctAns', 'y')]),
      OrderedDict([('word', 'encendido'), ('correctAns', 'y')]),
      OrderedDict([('word', 'caridad'), ('correctAns', 'y')]),
      OrderedDict([('word', 'perder'), ('correctAns', 'y')]),
      OrderedDict([('word', 'acontecimiento'), ('correctAns', 'y')]),
      OrderedDict([('word', 'aceite'), ('correctAns', 'y')]),
      OrderedDict([('word', 'cazar'), ('correctAns', 'y')]),
      OrderedDict([('word', 'indudable'), ('correctAns', 'y')]),
      OrderedDict([('word', 'mil'), ('correctAns', 'y')]),
      OrderedDict([('word', 'ajeno'), ('correctAns', 'y')]),
      OrderedDict([('word', 'selva'), ('correctAns', 'y')]),
      OrderedDict([('word', 'cemento'), ('correctAns', 'y')]),
      OrderedDict([('word', 'cuidadoso'), ('correctAns', 'y')]),
      OrderedDict([('word', 'calle'), ('correctAns', 'y')]),
      OrderedDict([('word', 'tren'), ('correctAns', 'y')]),
      OrderedDict([('word', 'valioso'), ('correctAns', 'y')]),
      OrderedDict([('word', 'enfermero'), ('correctAns', 'y')]),
      OrderedDict([('word', 'vejez'), ('correctAns', 'y')]),
      OrderedDict([('word', 'morir'), ('correctAns', 'y')]),
      OrderedDict([('word', 'cadena'), ('correctAns', 'y')]),
      OrderedDict([('word', 'cuadrado'), ('correctAns', 'y')]),
      OrderedDict([('word', 'descargar'), ('correctAns', 'y')]),
      OrderedDict([('word', 'poblar'), ('correctAns', 'y')]),
      OrderedDict([('word', 'pagar'), ('correctAns', 'y')]),
      OrderedDict([('word', 'silla'), ('correctAns', 'y')])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
    Routine trial
  LoopTerminator trials
  Routine final
